PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s' % (expInfo['participant'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1600, 900]
  expName = exp08
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    MouseComponent mouseTrial
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 0.0
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    CodeComponent codeTrial
      Code Type = Auto->JS
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      Begin Experiment:
        mouseTrial.setVisible(False)
        mouseReady.setVisible(False)
      Begin Routine:
        mouseTrial.setPos([startPos[0], -startPos[1]])
        probeX_list = [ ]
        probeY_list = [ ]
        onPath_list = [ ]
        frameN_list = [ ]
      Each Frame:
        mousePos = mouseTrial.getPos()
        px = mousePos[0]
        py = -mousePos[1]
        if goalDisc.contains([px, py]):
            continueRoutine = False
        onPath = False
        for path in [path1, path2, path3, path4, path5]:
            if path.contains([px, py]):
                onPath = True
                break

        if frameN % 6 == 0:
            probeX_list.append(px)
            probeY_list.append(py)
            onPath_list.append(onPath)
      End Routine:
        trials.addData('probe_x', probeX_list)
        trials.addData('probe_y', probeY_list)
        trials.addData('on_path', onPath_list)
        trials.addData('frameN', frameN_list)
    PolygonComponent path1
      fillColor = white
      ori [set every repeat] = path1ori
      pos [set every repeat] = path1pos
      shape = rectangle
      size = (0.24, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent path2
      fillColor = white
      ori [set every repeat] = path2ori
      pos [set every repeat] = path2pos
      shape = rectangle
      size = (0.24, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent path3
      fillColor = white
      ori [set every repeat] = path3ori
      pos [set every repeat] = path3pos
      shape = rectangle
      size = (0.24, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent path4
      fillColor = white
      ori [set every repeat] = path4ori
      pos [set every repeat] = path4pos
      shape = rectangle
      size = (0.24, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent path5
      fillColor = white
      ori [set every repeat] = path5ori
      pos [set every repeat] = path5pos
      shape = rectangle
      size = (0.24, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent goalDisc
      fillColor = green
      pos [set every repeat] = goalPos
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent probe
      fillColor = red
      pos [set every frame] = [px, py]
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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  Routine ready
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    MouseComponent mouseReady
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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    PolygonComponent startDisc
      fillColor = green
      pos [set every repeat] = startPos
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent probeReady
      fillColor = red
      pos [set every repeat] = startPos
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.03
      pos = [0, -0.32]
      startVal [time (s)] = 0.0
      text = 準備ができたらマウスの左ボタンをクリックしてください
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = exp08cnd.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'path1pos': (0.1763, 0.0927), 'path1ori': 0, 'path2pos': (0.1971, 0.0286), 'path2ori': -36, 'path3pos': (0.1427, -0.1391), 'path3ori': -108, 'path4pos': (0.0882, -0.1786), 'path4ori': -144, 'path5pos': (-0.0882, -0.1786), 'path5ori': -36, 'startPos': (0.0674, 0.0927), 'goalPos': (-0.1763, -0.2427)},
      {'path1pos': (0.1427, -0.1391), 'path1ori': -108, 'path2pos': (0.0882, -0.1786), 'path2ori': -144, 'path3pos': (-0.0882, -0.1786), 'path3ori': -36, 'path4pos': (-0.1427, -0.1391), 'path4ori': -72, 'path5pos': (-0.1971, 0.0286), 'path5ori': -144, 'startPos': (0.109, -0.0354), 'goalPos': (-0.2853, 0.0927)},
      {'path1pos': (-0.0882, -0.1786), 'path1ori': -36, 'path2pos': (-0.1427, -0.1391), 'path2ori': -72, 'path3pos': (-0.1971, 0.0286), 'path3ori': -144, 'path4pos': (-0.1763, 0.0927), 'path4ori': 0, 'path5pos': (-0.0337, 0.1964), 'path5ori': -72, 'startPos': (0.0, -0.1146), 'goalPos': (0.0, 0.3)},
      {'path1pos': (-0.1971, 0.0286), 'path1ori': -144, 'path2pos': (-0.1763, 0.0927), 'path2ori': 0, 'path3pos': (-0.0337, 0.1964), 'path3ori': -72, 'path4pos': (0.0337, 0.1964), 'path4ori': -108, 'path5pos': (0.1763, 0.0927), 'path5ori': 0, 'startPos': (-0.109, -0.0354), 'goalPos': (0.2853, 0.0927)},
      {'path1pos': (-0.0337, 0.1964), 'path1ori': -72, 'path2pos': (0.0337, 0.1964), 'path2ori': -108, 'path3pos': (0.1763, 0.0927), 'path3ori': 0, 'path4pos': (0.1971, 0.0286), 'path4ori': -36, 'path5pos': (0.1427, -0.1391), 'path5ori': -108, 'startPos': (-0.0674, 0.0927), 'goalPos': (0.1763, -0.2427)}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
    Routine ready
    Routine trial
  LoopTerminator trials
